config:
  title: Duke NGS_Workflow
  description: This workflow aids in tracking and handling RNA_Seq for the Duke Genome Center
  copyright: UW_BIOFAB
  version: 0.0.1
  authors: [{name: Cannon, affiliation: UW_BIOFAB}, {name: Amy Cash, affiliation: UW_BIOFAB}]
  maintainer: {name: Cannon Mallory, email: malloc3@uw.edu}
  github: {user: malloc3, repo: aq_ngs_workflow}
  aquadoc_version: 1.0.0
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
sample_types:
  - {name: RNA Sample, description: An individual unique sample of RNA}
    - {name: Customer, ftype: string}
    - {name: Code, ftype: string, required: true}
    - {name: Version, ftype: string}
    - {name: Type, ftype: string}
    - {name: Label, ftype: string}
    - {name: Organism, ftype: string}
    - {name: Conc, ftype: string}
    - {name: Volume, ftype: string}
    - {name: Pool, ftype: string}
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object_types:
  - {name: 96 Well Sample Plate, description: 96 well sample plate, handler: collection, unit: plate, release_method: return, rows: 8, columns: 12}
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operation_type: Normalization Pooling
category: RNA_Seq
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Input Array, sample_types: [RNA Sample], object_types: [96 Well Sample Plate], array: true, routing: IA}
  - {ftype: sample, role: output, name: Output Array, sample_types: [RNA Sample], object_types: [96 Well Sample Plate], array: true, routing: IA}
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documentation:
#This protocol is for total Normalization Pooling of cDNA.  It Will take in a batch of samples, replate these
#samples together onto a 96 well plate that will then go through a normalization steps.

This must be run after RNA QC, RNA Prep, and cDNA QC

precondition:
#This precondition checks that all inputs into the operation have valid concentrations and are ready to be used.
#Parts are copied from the WorkflowValidation Lib see note below for explination

def precondition(_op)
  #pass = true
  #_op = Operation.find(_op.id)
  #_op.input_array("Input Array").each do |field_value|
  #  qc = field_value.item.get("cDNA QC")
  #  pass = false unless qc == "Pass"
  #end
  #_op.associate("Pass".to_sym, pass)
  #true if pass
  true
end

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protocol:
# Cannon Mallory
# UW-BIOFAB
# 03/04/2019
# malloc3@uw.edu

needs 'Standard Libs/Debug'
needs 'Standard Libs/CommonInputOutputNames'
needs 'Standard Libs/Units'
needs 'Collection_Management/CollectionDisplay'
needs 'Collection_Management/CollectionTransfer'
needs 'Collection_Management/CollectionActions'
needs 'Collection_Management/CollectionLocation'
needs 'RNA_Seq/MiscMethods'
needs 'RNA_Seq/TakeMeasurements'
needs 'RNA_Seq/ParseCSV'
needs 'RNA_Seq/WorkflowValidation'
needs 'RNA_Seq/KeywordLib'
needs 'RNA_Seq/DataHelper'
needs 'RNA_Seq/CSVDebugLib'

# Normalization Pooling
class Protocol
  include Debug
  include Units
  include CollectionDisplay
  include CollectionTransfer
  include CollectionLocation
  include CollectionActions
  include CommonInputOutputNames
  include WorkflowValidation
  include DataHelper
  include MiscMethods
  include TakeMeasurements
  include ParseCSV
  include KeywordLib
  include CSVDebugLib

  TRANSFER_VOL = 20 # volume of sample to be transferred in ul

  def main
    return if validate_inputs(operations, inputs_match_outputs: true)
    return if validate_qc(operations)

    working_plate = setup_job(operations, TRANSFER_VOL, qc_step: false)

    normalization_pooling(working_plate)
    store_output_collections(operations, location: 'Freezer')
  end

  # Instructions for performing RNA_PREP
  #
  # @param working_plate [Collection] the plate with samples
  def normalization_pooling(working_plate)
    show do
      title 'Do the Normalization Pooling Steps'
      note "Run Normalization Pooling protocol with plate #{working_plate.id}"
      table highlight_non_empty(working_plate, check: false)
    end
  end
end

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object_types:
  - {name: Total RNA 96 Well Plate, description: 96 Well plate of total RNA from customer, handler: collection, unit: plate, release_method: return, prefix: ColdBoi, rows: 8, columns: 12, sample_type_name: RNA Sample}
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operation_type: RNA Prep
category: RNA_Seq
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Input Array, sample_types: [RNA Sample], object_types: [Total RNA 96 Well Plate], array: true, routing: R}
  - {ftype: sample, role: output, name: Output Array, sample_types: [RNA Sample], object_types: [96 Well Sample Plate], array: true, routing: R}
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documentation:
This preps RNA and makes cDNA.  The actual steps of RNA Prep are not illustrated well (by direction from Duke Genome Center).

Primarily this Protocol assists in batching of jobs.   Must be run after RNA QC

precondition:
#This precondition checks that all inputs into the operation have valid concentrations and are ready to be used.
#Parts are copied from the WorkflowValidation Lib see note below for explination

#Dont want to return false.  Only return true if it passes
def precondition(op)
  true 
  #_op = Operation.find(op.id)#

  #loops = _op.get("Loops".to_sym)
  #_op.associate("Initial_Loopos".to_sym, loops)
  #if loops.nil?
  #  loops = 0
  #else
  #  loops += 1
  #end

  #_op.associate("Loops".to_sym, loops)

#  pass = true
#  range = (50...100)#

  #_op.input_array("Input Array").each do |field_value|
  #  conc = field_value.part.get("Stock Conc (ng/ul)".to_sym)
  #  pass = false unless range.cover?(conc)
  #end

  ##if pass
    #_op.associate("Pass is true".to_sym, "Pass was true")
    #_op.associate("Pass is false".to_sym, "Its actually true now")
    #_op.status = 'pending'
    #_op.save
  #end
end

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protocol:
# Cannon Mallory
# UW-BIOFAB
# 03/04/2019
# malloc3@uw.edux

needs 'Standard Libs/Debug'
needs 'Standard Libs/CommonInputOutputNames'
needs 'Standard Libs/Units'
needs 'Standard Libs/UploadHelper'
needs 'Collection_Management/CollectionDisplay'
needs 'Collection_Management/CollectionTransfer'
needs 'Collection_Management/CollectionActions'
needs 'Collection_Management/CollectionLocation'
needs 'RNA_Seq/MiscMethods'
needs 'RNA_Seq/TakeMeasurements'
needs 'RNA_Seq/ParseCSV'
needs 'RNA_Seq/WorkflowValidation'
needs 'RNA_Seq/KeywordLib'
needs 'RNA_Seq/DataHelper'
needs 'RNA_Seq/CSVDebugLib'

require 'csv'

class Protocol
  include Debug
  include Units
  include CollectionDisplay
  include CollectionTransfer
  include CollectionLocation
  include CommonInputOutputNames
  include CollectionActions
  include UploadHelper
  include WorkflowValidation
  include DataHelper
  include MiscMethods
  include TakeMeasurements
  include ParseCSV
  include KeywordLib
  include CSVDebugLib

  ADAPTER_TRANSFER_VOL = 12 # volume of adapter to transfer
  TRANSFER_VOL = 20 # volume of sample to be transferred in ul
  CONC_RANGE = (50...100).freeze # acceptable concentration range
  CSV_HEADERS = ['Plate ID', 'Well Location'].freeze
  CSV_LOCATION = 'Location TBD'.freeze
  ADAPTER_KEY = 'Adapter_key'.to_sym

  def main
    return if validate_inputs(operations, inputs_match_outputs: true)
    return if validate_qc(operations)

    working_plate = setup_job(operations, TRANSFER_VOL, qc_step: false)

    adapter_plates = make_adapter_plate(working_plate.parts.length)
    adapter_plates.each do |adapter_plate|
      working_plate.associate(ADAPTER_KEY, adapter_plate)
      associate_plate_to_plate(to_collection: working_plate,
                               from_collection: adapter_plate)
    end

    rna_prep_steps(working_plate)
    store_output_collections(operations, location: 'Freezer')
  end

  # Instructions for performing RNA_PREP
  #
  # @param working_plate [Collection] the plate that has all samples in it
  def rna_prep_steps(working_plate)
    show do
      title 'Run RNA-Prep'
      note "Run typical RNA-Prep Protocol with RNA plate #{working_plate.id}
                and adapter plate #{working_plate.get(ADAPTER_KEY).class}"
      table highlight_non_empty(working_plate, check: false)
    end
  end

  # Instructions for making an adapter plate
  #
  # @param num_adapter_needed [int] the number of adapters needed for job
  # @return adapter_plate [Array<collection>] plate with all required adapters
  #
  # TODO: Add feature so that they can specify the specific sample that the
  #   adapter needs to match with Or perhapses specify the specific groups that
  #   they need to go to (or a combination there of)
  def make_adapter_plate(num_adapters_needed)
    adapter_plates = []

    show do
      title 'Make Adapter Plate'
      note 'On the next page upload CSV of desired Adapters'
    end

    up_csv = get_validated_uploads(min_length: num_adapters_needed, 
                                   headers: CSV_HEADERS, 
                                   file_location: CSV_LOCATION)
    col_parts_hash = sample_from_csv(up_csv)

    col_parts_hash.each do |collection_item, parts|
      collection = Collection.find(collection_item.id)

      plates = make_and_populate_collection(parts,
                                            collection_type: COLLECTION_TYPE,
                                            add_column_wise: true,
                                            label_plates: false)
      plates.each do |adapter_plate|
        transfer_from_collection_to_collection(collection,
                                             to_collection: adapter_plate,
                                             transfer_vol: ADAPTER_TRANSFER_VOL,
                                             populate_collection: false,
                                             array_of_samples: parts)
        adapter_plates.push(adapter_plate)
      end
    end
    adapter_plates
  end

  # Parses CSV and returns an array of all the samples
  #
  #
  # @param csv_uploads [array] array of uploaded CSV files
  # @returns hash [key: collection, array[parts]] hash of collection and samples
  def sample_from_csv(csv_uploads)
    parts = []
    csv = CSV.parse(csv_upload) if debug
    csv_uploads.each do |upload|
      csv = CSV.read(open(upload.url))

      first_row = csv.first
      first_row[0][0] = ''

      id_idx = first_row.find_index(CSV_HEADERS[0])
      loc_idx = first_row.find_index(CSV_HEADERS[1])
      csv.drop(1).each do |row|
        collection = Collection.find(row[id_idx])
        part = part_alpha_num(collection, row[loc_idx])
        parts.push(part)
      end
    end
    parts.group_by(&:containing_collection)
  end
end

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operation_type: RNA QC
category: RNA_Seq
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Input Array, sample_types: [RNA Sample], object_types: [Total RNA 96 Well Plate], array: true, routing: IS}
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documentation:
Total RNA QC

Plates sub-samples onto a 96 well plate. Measures RNA concentration and associates it with the original samples.

Precursor to RNA_Prep

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protocol:
# Cannon Mallory
# UW-BIOFAB
# 03/04/2019
# malloc3@uw.edu

needs 'Standard Libs/Debug'
needs 'Standard Libs/CommonInputOutputNames'
needs 'Standard Libs/Units'
needs 'Standard Libs/UploadHelper'
needs 'Standard Libs/ItemActions'
needs 'Collection_Management/CollectionDisplay'
needs 'Collection_Management/CollectionTransfer'
needs 'Collection_Management/CollectionActions'
needs 'Collection_Management/CollectionLocation'
needs 'RNA_Seq/MiscMethods'
needs 'RNA_Seq/TakeMeasurements'
needs 'RNA_Seq/ParseCSV'
needs 'RNA_Seq/WorkflowValidation'
needs 'RNA_Seq/KeywordLib'
needs 'RNA_Seq/DataHelper'

# RNA QC
class Protocol
  include CollectionActions
  include CollectionDisplay
  include CollectionTransfer
  include CommonInputOutputNames
  include Debug
  include CollectionLocation
  include Units
  include UploadHelper
  include WorkflowValidation
  include DataHelper
  include MiscMethods
  include TakeMeasurements
  include ParseCSV
  include KeywordLib
  include ItemActions

  TRANSFER_VOL = 20 # volume of sample to be transferred in ul
  PLATE_HEADERS = ['Plate',	'Repeat',	'End time',
                   'Start temp.',	'End temp.',	'BarCode'].freeze
  PLATE_LOCATION = 'TBD Location of file'.freeze

  BIO_HEADERS = ['Well', 'Sample ID',	'Conc. (ng/ul)',
                 'RQN',	'28S/18S'].freeze
  BIO_LOCATION = 'TBD Location of file'.freeze

  RIN_MIN = 3
  RIN_MAX = 10

  CONC_MIN = 8
  CONC_MAX = 100
  UP_MARG = 500
  LOW_MARG = 5

  def main
    return true if validate_inputs(operations)

    working_plate = setup_job(operations, TRANSFER_VOL, qc_step: true)

    trash_object([working_plate])

    setup_and_take_plate_reader_measurements(working_plate, PLATE_HEADERS,
                                             PLATE_LOCATION)

    setup_ad_take_bioanalizer_measurements(working_plate, BIO_HEADERS,
                                           BIO_LOCATION, RIN_KEY, 0, 3)

    rin_info = generate_data_range(key: RIN_KEY, minimum: RIN_MIN,
                                   maximum: RIN_MAX)

    conc_info = generate_data_range(key: CON_KEY, minimum: CONC_MIN,
                                    maximum: CONC_MAX, lower_margin: LOW_MARG,
                                    upper_margin: UP_MARG)

    asses_qc_values(working_plate, [rin_info, conc_info])

    show_key_associated_data(working_plate, [QC_STATUS, CON_KEY, RIN_KEY])

    # TODO: For some reason it will not overwrite the old association...
    associate_data_back_to_input(working_plate, [QC_STATUS, CON_KEY, RIN_KEY],
                                 operations)

    trash_object([working_plate])

    downstream_op_type = 'RNA Prep'
    return if stop_qc_failed_operations(operations, downstream_op_type)
  end
end

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operation_type: cDNA QC
category: RNA_Seq
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Input Array, sample_types: [RNA Sample], object_types: [96 Well Sample Plate], array: true, routing: IA}
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documentation:
#This Protocol is to Quality check the cDNA created in RNA Prep.  Must be run after RNA Prep but before Normalization Pooling

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protocol:
# Cannon Mallory
# UW-BIOFAB
# 03/04/2019
# malloc3@uw.edu
#
# This Protocol is to Quality check the C-DNA created.

needs 'Standard Libs/Debug'
needs 'Standard Libs/CommonInputOutputNames'
needs 'Standard Libs/Units'
needs 'Standard Libs/UploadHelper'
needs 'Collection_Management/CollectionDisplay'
needs 'Collection_Management/CollectionTransfer'
needs 'Collection_Management/CollectionActions'
needs 'Collection_Management/CollectionLocation'
needs 'RNA_Seq/MiscMethods'
needs 'RNA_Seq/TakeMeasurements'
needs 'RNA_Seq/ParseCSV'
needs 'RNA_Seq/WorkflowValidation'
needs 'RNA_Seq/KeywordLib'
needs 'RNA_Seq/DataHelper'
needs 'RNA_Seq/CSVDebugLib'

class Protocol
  include CollectionDisplay
  include CollectionTransfer
  include CollectionActions
  include CommonInputOutputNames
  include Debug
  include CollectionLocation
  include WorkflowValidation
  include DataHelper
  include MiscMethods
  include TakeMeasurements
  include ParseCSV
  include KeywordLib
  include CSVDebugLib

  TRANSFER_VOL = 20 # volume of sample to be transferred
  PLATE_HEADERS = ['Plate',	'Repeat',	'End time',	'Start temp.',
                   'End temp.',	'BarCode'].freeze
  PLATE_LOCATION = 'TBD Location of file'.freeze

  BIO_HEADERS = ['Well',	'Sample ID',	'Range',	'ng/uL',	'% Total',
                 'nmole/L',	'Avg. Size',	'%CV'].freeze
  BIO_LOCATION = 'TBD Location of file'.freeze

  SIZE_MIN = 3
  SIZE_MAX = 10

  CONC_MIN = 8
  CONC_MAX = 100
  UP_MARG = 500
  LOW_MARG = 5

  def main
    return true if validate_inputs(operations)

    working_plate = setup_job(operations, TRANSFER_VOL, qc_step: true)

    setup_and_take_plate_reader_measurements(working_plate, PLATE_HEADERS, 
                                             PLATE_LOCATION)
    setup_ad_take_bioanalizer_measurements(working_plate, BIO_HEADERS, BIO_LOCATION,
                                           AVE_SIZE_KEY, 0, 6)

    ave_size_info = generate_data_range(key: AVE_SIZE_KEY, minimum: SIZE_MIN,
                                        maximum: SIZE_MAX)

    conc_info = generate_data_range(key: CON_KEY, minimum: CONC_MIN,
                                    maximum: CONC_MAX, lower_margin: LOW_MARG,
                                    upper_margin: UP_MARG)

    asses_qc_values(working_plate, [ave_size_info, conc_info])

    show_key_associated_data(working_plate, [QC_STATUS, CON_KEY, AVE_SIZE_KEY])

    # TODO: For some reason it will not overwrite the old association...
    associate_data_back_to_input(working_plate, [QC_STATUS, CON_KEY, RIN_KEY],
                                 operations)

    trash_object(working_plate)

    downstream_op_type = 'RNA Prep'
    return if stop_qc_failed_operations(operations, downstream_op_type)
  end
end

library: {name: CsvDebugLib, category: RNA_Seq}
code_source:
module CsvDebugLib
    CSV_DEBUG = "Plate ID, Well Location
1598,A1
1598,A2
1598,A3
1598,A4
1597,C1
1597,C2
1597,C3
1597,C4
1597,C5
1597,C6
1597,C7
1597,C8"

    CSV_CONC = "Plate Position, Well Position, Conc (ng/ul)
    A01,A1,58
    B01,B1,55
    C01,C1,60
    D01,D1,67
    E01,E1,66
    F01,F1,88
    G01,G1,98
    A02,A2,74
    B02,B2,92
    C02,C2,57
    D02,D2,58
    E02,E2,99
    F02,F2,56
    G02,G2,58
    A03,A3,66
    B03,B3,57
    C03,C3,66
    D03,D3,99
    E03,E3,87
    F03,F3,78
    G03,G3,56"
end

library: {name: DataHelper, category: RNA_Seq}
code_source:
needs 'Standard Libs/CommonInputOutputNames'
needs 'Standard Libs/AssociationManagement'
needs 'Standard Libs/Units'
needs 'Standard Libs/UploadHelper'
needs 'RNA_Seq/KeywordLib'
    
module DataHelper    
  include CommonInputOutputNames
  include Units
  include UploadHelper
  include AssociationManagement
  include KeywordLib


  # Gets the standards used and information about them from tech
  #
  # @param tries [Int] optional the number of tries the tech gets
  #   to input standard information
  # @return []  the standards used in plate reader measurement
  def get_standards(tries: 10)
    fluorescence = []
    standard = []

    tries.times do |laps|
      # TODO make this a table and not just a bunch of inputs
      response = show do
        title "Plate Reader Standards"
        note 'Please record the standards used and their fluorescence below'
        get "number", var: "stan_1", label: "Concentration 1 (ng/ul)", default: ""
        get "number", var: "flo_1", label: "Fluorescence 1", default: ""
        separator
        get "number", var: "stan_2", label: "Concentrationn 2 (ng/ul)", default: ""
        get "number", var: "flo_2", label: "Fluorescence 2", default: ""
      end
      # This is because in this case  the lower concentration should always be first
      # else slope will be negative.   Rather do it here than in the slope calculation
      # because the slope calulation may be used other places and thus needs to be able
      # to report a neg slope.
      if response[:stan_1] > response[:stan_2]
        point_two = [response[:flo_1], response[:stan_1]]
        point_one = [response[:flo_2], response[:stan_2]]
      else
        point_one = [response[:flo_1], response[:stan_1]]
        point_two = [response[:flo_2], response[:stan_2]]
      end
      
      return [point_one, point_two] unless point_two.include?("") || point_one.include?("")

      raise "Too many attempts to input Plate Reader Standards information" if laps > tries - 1
      show do 
        title "Plate Reader Standards not Entered Properly"
        warning "Please input valid Standard Values"
        note "Hit okay to try again" 
      end
    end
  end




  # Calculates the slope and intercept between two points
  #
  # @param point_one [Array<x,y>] the x,y coordinates of point one
  # @param point_two [Array<x,y>] the x,y coordinates of point two 
  def calculate_slope_intercept(point_one: standards[0], point_two: standards[1])
    x_1 = point_one[0]
    y_1 = point_one[1]
    x_2 = point_two[0]
    y_2 = point_two[1]
    
    slope = (y_2 - y_1).to_f/(x_2 - x_1)
    intercept = y_1 - (slope * x_1)
    [slope, intercept]
  end



  # calculates the concentrations of the samples from the slope, intercept, dilution factor
  # and the plate reader information.
  #
  # @param slope [Float] the slope of the calibration curve
  # @param intercept [Float] the intercept of the calibration curve
  # @param plate_csv [CSV] csv file partially parsed with plate reader values
  # @param dilution_map [Array<Array<r,c, dilution factor>>] the dilution factor map
  # @param concentration_map [Array<Array<r,c, concentration>>] map of concentrations
  def calculate_concentrations(slope:, intercept:, plate_csv:, dilution_map:)
    concentration_map = []
    dilution_map.each do |row, column, dilution|
      fluorescence = plate_csv[row][column].to_f
      concentration = ((fluorescence * slope + intercept)*dilution/1000).round(1)
      concentration_map.push([row,column,concentration])
    end
    concentration_map
  end




  # Generates a hash with the margin range and the data key.  To be passed to 
  # "asses_qc_values" method 
  def generate_data_range(key:, minimum:, maximum:, lower_margin: nil, upper_margin: nil)
    good_range = (minimum...maximum+1)
    margin = []

    #couldn't use unless since I needed if later
    if !lower_margin.nil? || !upper_margin.nil?
      margin = (lower_margin...upper_margin)
    elsif lower_margin.nil?
      margin = (minimum... upper_margin)
    else upper_margin.nil?
      margin = (lower_margin...maximum)
    end

    {'key': key, 'pass': good_range, 'margin': margin}
  end




  # Asses weather the data held in info array keys are within the 
  # margins given by the hash
  #
  # @param collection [Collection] the collection in question
  # @param info_array [Array<Hash{key, pass, margin}]
  def asses_qc_values(collection, info_array)
    data_map = []
    collection.parts.each do |part|
        overall_status = nil
        info_array.each do |info_hash|
          key = info_hash[:key]
          pass_array = info_hash[:pass]

          margin = info_hash[:margin]

          #data = get_associated_data(part, key).to_f
          data = part.get(key).to_f

          if pass_array.include?(data)
            point_status = 'pass'
          elsif margin.include?(data)
            point_status = 'margin'
          elsif data.nil?
            point_status = nil
          else
            point_status = 'fail'
          end

          change_arry = ['margin', 'fail']
          unless point_status == overall_status
            if overall_status.nil?
              overall_status = point_status
            elsif overall_status == 'pass' && change_arry.include?(point_status)
              overall_status = point_status
            end
          end

        end
        unless overall_status.nil?
          location = collection.find(part)
          location.push(overall_status)
          location.push(QC_STATUS)
          data_map.push(location)
        end
    end 
    associate_value_key_to_parts(plate: collection, data_map: data_map)
  end




  # Associates data back to the input samples based on the source determined from 
  # provenance.
  #
  # @param collection [Collection] the collection with items of question
  # @param array_of_keys [Array<string>] an array or keys for the associations
  #       that need to be back associated
  def associate_data_back_to_input(collection, array_of_keys, operations)
    input_io_fv = get_input_field_values(operations)
    collection.parts.each do |part|
      sources = part.get('source')
      sources.uniq! #so if multiple sources are the same item data
      # is transferred only once
      sources.each do |sample_source|
        unless sample_source.nil?
          field_value = input_io_fv.select{|io_fv| io_fv.part.id == sample_source[:id]}.first
          array_of_keys.each do |key|
            data_obj = part.get(key)
            field_value.associate(key, data_obj) unless data_obj.nil?
          end
        end
      end
    end
  end

  # Generates a standard dilution factor map.  Assumes that there was no dilution.
  #
  # @param working_plate [Collection] the collection that the map is being generated for
  # @return dilution_factor_map [Array<r,c,dilution_factor>] map of dilutions
  def generate_100_dilution_factor_map(working_plate)
    parts = working_plate.parts
    dilution_factor_map = []
    parts.each do |part|
      loc = working_plate.find(part).first
      loc.push(100)
      dilution_factor_map.push(loc)
    end
    dilution_factor_map
  end

end

library: {name: KeywordLib, category: RNA_Seq}
code_source:
# frozen_string_literal: true

# Cannon Mallory
# malloc3@uw.edu
#
# This is where all the standard keywords/values will live.

module KeywordLib
  MAX_INPUTS = 96
  COLLECTION_TYPE = '96 Well Sample Plate'
  CON_KEY = 'Stock Conc (ng/ul)'
  QC2_KEY = 'cDNA QC'
  DILUTION_FACTOR = 'Dilution Factor'

  ADAPTER_PLATE = 'Adapter Plate'
  ADAPTER = 'Adapter Item'

  INPUT_PLATE = 'Input Plate'
  INPUT_ITEM = 'Input Item'

  PLATE_READER_DATA_KEY = "Plate Reader Data"
  BIOANALYZER_KEY = "Bioanalyzer Data"
  RIN_KEY = "Rin Number"

  AVE_SIZE_KEY = "Avg. Size"

  QC_STATUS = "QC Status"

end

library: {name: MiscMethods, category: RNA_Seq}
code_source:
# A library for all the parts of this workflow that are repeated between
# multiple operations however do not neatly fit in any other library

needs 'Standard Libs/CommonInputOutputNames'
needs 'Collection_Management/CollectionDisplay'
needs 'Collection_Management/CollectionTransfer'
needs 'Collection_Management/CollectionActions'
needs 'RNA_Seq/KeywordLib'
    
    
    
module MiscMethods
  include CollectionActions
  include CollectionDisplay
  include CollectionTransfer
  include KeywordLib
  include CommonInputOutputNames

  
  # Sets up the job and manages transfers etc all that jazz
  #
  # @param operations [OperationList] list of operations
  # @param transfer_vol [Int or Float] the volume that is to be transferred
  def setup_job(operations, transfer_vol, qc_step: false)
    operations.retrieve
    working_plate = transfer_steps(operations, transfer_vol, qc_step: qc_step)

    if false #qc_step
      #this is so if the protocol fails we don't end up with a bunch of 
      # plates in inventory that actually don't exist. 
      working_plate.mark_as_deleted
      working_plate.save
    end

    store_inputs(operations)
    working_plate
  end

  
    
  # Handles the transfers for the two qc steps
  #
  # @param operations [OperationList] list of operations
  # @param working_plate [collection] the plate being transferred to
  # @transfer_vol [Int or Float] the volume being transferred
  def transfer_steps(operations, transfer_vol, qc_step: false)
    input_field_value_array = []
    output_fv_array = []
    operations.each do |op|
      input_field_value_array += op.input_array(INPUT_ARRAY)
      output_fv_array += op.output_array(OUTPUT_ARRAY) unless qc_step
    end

    plates = transfer_subsamples_to_working_plate(input_field_value_array, collection_type: COLLECTION_TYPE, 
                                                                    transfer_vol: transfer_vol,
                                                                    add_column_wise: true)

    associate_field_values_to_plate(output_fv_array, plates) unless qc_step

    if plates.length > 1
      raise 'Too many items'
    end
    plates.first
  end


    # Gets all input field values from all input operations
  #
  # @param operations [OperationList] list of operations
  # @return [Array<io_field_values>]
  def get_input_field_values(operations)
    io_field_values  = []
    operations.each do |op|
      io_field_values += op.input_array(INPUT_ARRAY)
    end
    io_field_values
  end


  # Shows key associated data in the collection based on
  # the array of keys in the data keys list
  #
  # @param collection [Collection] the collection
  # @param data_keys [Array<Keys>] keys can be string or
  #     anything that data associator can use
  def show_key_associated_data(collection, data_keys)
    show do
      title "Measured Data"
      note "Listed below are the data collected"
      note "(Concentration (ng/ul), RIN Number)"
      table display_data(collection, data_keys)
      #  TODO add in feature for tech to change QC Status
    end
  end
    
end

library: {name: ParseCSV, category: RNA_Seq}
code_source:
needs 'Collection_Management/CollectionLocation'
needs 'RNA_Seq/KeywordLib'

module ParseCSV
  include CollectionLocation
  include KeywordLib
    
  # Parses a csv for data assuming headers fit certain format
  #  Header 1    Header 2    Header 3
  #    loc         data      data
  #    loc         data       data
  # 
  # @param csv [CSV] the csv file
  # @param data_header [String] the string name of the header containing the information of interest
  # @param alpha_num_header [String] optional the name of the header containing the 
  #               alpha numerical well location
  def parse_csv_for_data(csv, data_header:, alpha_num_header:)
    data_idx = csv.first.index(data_header)
    loc_idx = csv.first.index(alpha_num_header)
    data_map = []
    csv.drop(1).each do |row|
      alpha_loc = row[loc_idx]
      data = row[data_idx]
      rc_loc = convert_location_to_coordinates(alpha_loc)
      data_map.push(rc_loc.push(data))
    end
    data_map
  end
  
  
  
    # Does initial formatting and parseing of csv files
  #
  # @param csv_uploads [Upload] raw uploaded csv files
  # @return [Array<csv, Hash>] retunrs an array containg the semi parse csv
  #    and a hash of general plate reader run info.
  def pre_parse_plate_reader_data(csv_uploads)
    upload = csv_uploads.first
    csv = CSV.read(open(upload.url))
    plate_reader_info = {
      'repeats' => csv[1][1],
      'end_time' => csv[1][2],
      'start_temp'  => csv[1][3],
      'end_temp' => csv[1][4],
      'bar_code' => csv[1][5]
      }
    [csv, plate_reader_info]
  end
  
  
end

library: {name: TakeMeasurements, category: RNA_Seq}
code_source:
needs 'Standard Libs/AssociationManagement'
needs 'Collection_Management/CollectionData'
needs 'RNA_Seq/ParseCSV'
needs 'RNA_Seq/WorkflowValidation'
needs 'RNA_Seq/DataHelper'
needs 'RNA_Seq/KeywordLib'
    
    
    
module TakeMeasurements
  include CollectionData
  include AssociationManagement
  include DataHelper
  include ParseCSV
  include KeywordLib

  # Sets up and take Bioanalyzer measurements and associates the information back to 
  # the items in the working plate
  #
  # @param working_plate [Collection] the working plate
  # @param bio_headers, [Array<String>] the headers that should be in the excel sheet
  # @param bio_location [String] the location of the file that comes from the plate reader
  # @param data_key [String] the key that teh data should be associated to
  # @param loc_col [Int] the column in the csv that the well location is listed
  # @param data_col [Int] the column in the csv that the data is located in
  def setup_ad_take_bioanalizer_measurements(working_plate, bio_headers, bio_location, 
    data_key, loc_col, data_col)
    if data_key = RIN_KEY
      measurement_type = 'rna'
    elsif data_key = AVE_SIZE_KEY
      measurement_type = 'library'
    else
      measurement_type = data_key
    end

    bio_csv = take_bioanalizer_measurement(working_plate, bio_headers, bio_location,
          measurement_type: measurement_type)

    data_map = parse_csv_for_data(bio_csv, data_header: bio_headers[data_col], alpha_num_header: bio_headers[loc_col])
    associate_value_to_parts(plate: working_plate, data_map: data_map, key: data_key)
  end
    
  # Sets up and take plate reader measurements and associates the information back to 
  # the items in the working plate
  #
  # @param working_plate [Collection] the working plate
  # @param plate_headers, [Array<String>] the headers that should be in the excel sheet
  # @param plate_location [String] the location of the file that comes from the plate reader    
  def setup_and_take_plate_reader_measurements(working_plate, plate_headers, plate_location)
    dilution_factor_map = get_dilution_factors(working_plate)
    associate_value_to_parts(plate: working_plate, data_map: dilution_factor_map, key: DILUTION_FACTOR)

    plate_reader_csv, standards = take_duke_plate_reader_measurement(working_plate, plate_headers, plate_location)
    slope, intercept = calculate_slope_intercept(point_one: standards[0], point_two: standards[1])

    concentration_map = calculate_concentrations(slope: slope, intercept: intercept, 
                plate_csv: plate_reader_csv, dilution_map: dilution_factor_map)
    associate_value_to_parts(plate: working_plate, data_map: concentration_map, key: CON_KEY)
  end

  # TODO
  # Gets the dilution factors used in the plate reader measurements
  # Need some guidance on how this is determined.  I expect that this is something
  # that can automatically be generated within aquarium.  But also may require
  # some user input?   For now leave it open for change
  #
  # @return dilution_factor_map [Array<r,c,x>] a map of dilution factors and location
  def get_dilution_factors(working_plate)
    show do 
      title "Dilution Factor"
      note "Need to determine how this is decided.  For now dilution is assumed to be
        100."
      note "A user input may be needed or further understanding and control of,
              the transfer step may be required..."
    end
    generate_100_dilution_factor_map(working_plate)
  end


  # Instructions for taking the QC Plate Reader measurements
  # 
  #
  # @param working_plate [Collection] the plate of samples needing measurements
  # @return parsable csv file map of fluorescence values
  def take_duke_plate_reader_measurement(working_plate, csv_headers, csv_location)
    standards = get_standards

    show do
      title "Load Plate #{working_plate.id} on Plate Reader"
      note 'Load plate on plate reader and take measurements'
      note 'Save output data as CSV and upload on next page'
    end

    detailed_instructions = "Upload Plate Reader measurement files"
    csv_uploads = get_validated_uploads(working_plate.parts.length,
      csv_headers, false, file_location: csv_location, detailed_instructions: detailed_instructions)

    csv, plate_reader_info = pre_parse_plate_reader_data(csv_uploads)

    associate_data(working_plate, PLATE_READER_DATA_KEY, plate_reader_info)
    [csv.drop(6), standards]
  end


  # Instructions for taking Duke Bioanalyzer measurements 
  # 
  #
  # @param working_plate [Collection] the plate of samples needing measurements
  # @return parsable csv file map of fluorescence values
  def take_bioanalizer_measurement(working_plate, csv_headers, csv_location, measurement_type: nil)
    if measurement_type == 'library'
      description = 'Library DNA'
    elsif measurement_type == 'rna'
      description = 'RNA'
    else
      description = measurement_type
    end
    
    show do
      title "Load Plate #{working_plate.id} onto the Bioanalyzer"
      note "Load plate onto the Bioanalyzer and take <b>#{description}</b> measurements"
      note 'Save output data as CSV and upload on next page'
    end

    detailed_instructions = "Upload Bioanalyzer #{description} measurement files"
    csv_uploads = get_validated_uploads(working_plate.parts.length,
      csv_headers, false, file_location: csv_location, detailed_instructions: detailed_instructions)

    upload = csv_uploads.first
    csv = CSV.read(open(upload.url))

    associate_data(working_plate, BIOANALYZER_KEY, csv)
    csv
  end
end

library: {name: WorkflowValidation, category: RNA_Seq}
code_source:
# frozen_string_literal: true

# Cannon Mallory
# malloc3@uw.edu
#
# Module that validates workflow parameters at run time
needs 'Standard Libs/AssociationManagement'
needs 'Standard Libs/CommonInputOutputNames'
needs 'RNA_Seq/KeywordLib'

module WorkflowValidation
  include AssociationManagement
  include CommonInputOutputNames
  include KeywordLib

  # Validates that total inputs (from all operations)
  # are within the acceptable range
  # 
  # @param operations [OperationList] list of all operations in the job
  # @param inputs_match_outputs [Boolean] check if number of inputs matches number of outputs
  # @return cancel_job [Boolean] true if job should be canceled/ended now
  def validate_inputs(operations, inputs_match_outputs: false)
    total_inputs = []
    total_outputs = []
    operations.each do |op|
      total_inputs += op.input_array(INPUT_ARRAY).map! { |fv| fv.sample }
      total_outputs += op.output_array(OUTPUT_ARRAY).map! { |fv| fv.sample }
    end


    a = total_inputs.detect{ |item| total_inputs.count(item) > 1}
    message = ''
    message += "Item #{a.id} has been included multiple times in this job," if a != nil
    message += 'The number of Input Items and Output
            Items do not match,' if total_inputs.length != total_outputs.length && inputs_match_outputs
    message += 'Too many Items for this job. Please re-launch 
            job with fewer Items,' if total_inputs.length > MAX_INPUTS
    message += 'There are no Items for this job.' if total_inputs.length <= 0
    return end_job(operations, message: message) unless message == ''
    false
  end

  # Displays all erred operations and items that failed QC
  # Walks through all validation fails.
  #
  # @param failed_ops [Hash] Key: Operation ID, Value: Array[Items]
  def show_erred_operations(failed_ops)
    show do 
      title "Some Operations have failed QC"
      note "<b>#{failed_ops.length}</b> Operations have Items that failed QC"
      note "The next few pages will show which Operations and Items
              are at fault"
    end

    failed_ops.each do |op, erred_items|
      show do
        title "Failed Operation and Items"
        note "Operation <b>#{op.id}</b> from Plan <b>#{op.plan.id}</b>"
        erred_items.each do |item|
          note "Item <b>#{item.id}</b>"
        end
      end
    end
  end

  
  # Validates that operations have passed QC
  #
  # @param operations [OperationList] list of operations
  def validate_qc(operations)
    failed_ops = get_qc_fails(operations)
    manage_failed_ops(operations, failed_ops)
  end




  # Get all the operation that did not pass QC
  #
  # @param operations [OperationList] list of all operations
  # @return failed_ops [OperationList] list of all failed operations
  def get_qc_fails(operations)
    failed_ops = Hash.new
    operations.each do |op|
      failed_items = []
      op.input_array(INPUT_ARRAY).each do |fv|
        if get_associated_data(fv, QC_STATUS) == 'fail'
          failed_items.push(fv)
        end
      end
      failed_ops[op] = failed_items
    end
    failed_ops
  end




  # Manages failed ops.  Coordinates what needs to happen with failed operations
  # Can return remove all items from the operation list Operations
  # this is useful for certain fail criteria but must be careful else
  # things will act very oddly
  #
  # @param operations [OperationList] lis of operations
  # @param failed_ops [Hash] list of failed operations (OperationList okay too)
  # @param interactive [Boolean] if true then is interactive.  Else will automatically
  #     fail failed ops but continue good ops
  # @return cancel_job [Boolean] true if job should be canceled
  def manage_failed_ops(operations, failed_ops, interactive: true, 
      error_failed: false, delay_similar_ops: true)
    unless failed_ops.empty?
      this_job = operations.first.jobs.last

      #must remove all ops from the job that are in the same plan as the failed ops
      removed_ops = get_removed_ops(operations, failed_ops)

      #get the total number of items that were removed from the job
      num_items_removed = get_num_items(failed_ops)
      num_items_removed += get_num_items(removed_ops) if delay_similar_ops 

      #get total number of items originally in th job
      total_items = get_num_items(operations)

      #get the number of items still in the job
      num_items_left = total_items - num_items_removed

      cancel_ops_and_pause_plans(operations, failed_ops, additional_ops: removed_ops, 
        error_failed: error_failed, delay_similar_ops: delay_similar_ops)
      
      cancel_job = false
      if operations.empty?
        cancel_job = true
      elsif interactive
        cancel_job = get_cancel_feedback(total_items, num_items_removed, num_items_left)
        show_erred_operations(failed_ops)
      end

      return end_job(operations) if cancel_job
      false
    end
  end


  
  # cancels the job.  Sets all operations passed to pending
  # and returns true.   Assumes that in protocol code there
  # exists a case statement if true will skip the rest of 
  # protocol and end protocol (without error)
  #
  # Will also display a message (that can be customized) about
  # canceling the job
  #
  # operations [Array<Operation>] an array (or OperationList)of ops
  # message [String] optional sting for canceled message
  def end_job(operations, message: nil)
    set_to_pending(operations)
    show do
      title "Job Ended"
      unless message.nil?
        note "#{message}"
      else
        note "This job has been ended"
      end
    end
    true
  end




  # sets the operations in the list given to pending
  #
  # operations [Array<Operation>] an array (or OperationList)of ops
  def set_to_pending(operations)
    operations.each do |op|
      op.set_status_recursively('pending')
    end
  end


  # gets feed back from the tech on weather they want to continue with
  # the job or to cancel and re batch.
  #
  # @param total_items [Int] the total number of items in the job
  # @param num_failed [Int] number of failed items
  # @param num_left [Int] number of items left in job
  # @return cancel [Boolean] true if the job should be canceled
  def get_cancel_feedback(total_items, num_failed, num_left, num_tries: 10)
    cancel = nil
    num_tries.times do 
      feedback_one = show do 
        title "Some Items in this Job failed QC"
        separator
        warning "Warning"
        separator
        note "<b>#{num_failed}</b> out of <b>#{total_items}</b> items were 
              removed from this job"
        note "Do you want to continue this job with the remaining <b>#{num_left}</b> items"
        select ["Yes", "No"], var: "continue".to_sym, label: "Continue?", default: 1
      end

      if feedback_one[:continue] == "No"
        feedback_two = show do
          title "Are You Sure?"
          note "Are you sure you want to cancel the whole job?"
          select ["Yes", "No"], var: "cancel".to_sym, label: "Cancel?", default: 1
        end
        if feedback_two[:cancel] == "Yes"
          return true
        end
      else
        return false
      end
    end
    raise "Job Canceled, answer was not consistent.  All Operations erred"
  end

  # get all the operations that may be in the same plan that should be removed
  # from the job but should not be canceled or erred.
  #
  # @param operations [OperationList] list of operations
  # @param failed_ops [Hash] hash of key op: value Array[Items]
  # @return removed_ops [Array] list of operations that should be removed
  def get_removed_ops(operations, failed_ops)
    removed_ops = []
    failed_ops.each do |failed_op, erred_items|
      plan = failed_op.plan
      operations.each do |op|
        unless failed_ops.keys.include?(op) || removed_ops.include?(op) || op.plan != plan
          removed_ops.push(op)
        end
      end
    end
    removed_ops
  end



  # cancels all failed ops and removes from operations list
  # sets all like ops in same plans as failed ops to 'delayed'
  # Can return remove all items from the operationlist Operations
  # this is useful for certain fail criteria but must be careful else
  # things will act very oddly
  #
  # @param operations [OperationList] list of operations
  # @param failed_ops [Hash] list of failed operations
  # @param removed_ops [Array] list of ops that did not fail but need to be removed from plan
  def cancel_ops_and_pause_plans(operations, failed_ops, additional_ops: nil, 
            error_failed: false, delay_similar_ops: true)
    cancel_ops(operations, failed_ops, error_op: error_failed)
    cancel_ops(operations, additional_ops) if delay_similar_ops && !additional_ops.nil?
    pause_like_ops(failed_ops) if delay_similar_ops
  end


  # 'delay' all like ops in plans that contained failed_ops
  #
  # @param operations [OperationList] list of operations
  # @param failed_ops [Hash] list of failed operations
  def pause_like_ops(failed_ops)
    failed_ops.keys.each do |failed_op|
      plan = failed_op.plan
      pause_ops_of_type(plan, failed_op.operation_type.name)
    end
  end

  # moves all operations in a plan of a certain object type to delayed
  # @param plan [Plan] the plan
  # @param operation_type [String] the name of the operation type
  # @param exclude [Array<operation>] an array of operations to 
  #    be excluded
  def pause_ops_of_type(plan, operation_type, exclude: [])
    ops = plan.operations.select{|op| op.operation_type.name == operation_type}
    ops.each do |op|
      op.set_status_recursively('delayed') unless exclude.include?(op)
    end
  end

  # cancels all failed ops and removes them from operations list
  #
  # @param remove_ops [Array] or [Hash] list of failed operations
  def cancel_ops(operations, remove_ops, error_op: false)

    if remove_ops.is_a?(Hash)
      remove_ops = remove_ops.keys
    end

    remove_ops.each do |op|
      if error_op
        op.set_status_recursively('error')
      else
        op.set_status_recursively('delayed')
      end
      operations.delete(op)
    end
    operations
  end

  # gets the number of input items in the input array of each op in list
  #
  # @param ops [Array] Operation List is acceptable of operations
  # @return num_items [Int] the number of input items (Hash is acceptable)
  def get_num_items(ops)

    if ops.is_a?(Hash)
      ops = ops.keys
    end

    num_items = 0
    ops.each do |op|
      num_items += op.input_array(INPUT_ARRAY).length
    end
    num_items
  end


    # Goes through and stops all failed ops and moves them to error
  # Calls method that will also pause all plans of the same type
  #
  # @param operations [OperationList] list of operations
  # @param downstream_operation_type [String] the name of the operation to be delayed
  # @return cancel_job [Boolean] true if the job should be ended now
  def stop_qc_failed_operations(operations, downstream_operation_type)
    # get a list of operations that did fail qc
    failed_ops = get_qc_fails(operations)
    failed_ops.each do |op, failed_items|
      plan = op.plan
      pause_ops_of_type(plan, downstream_operation_type)
    end
    manage_failed_ops(operations, failed_ops, interactive: false, 
      error_failed: true, delay_similar_ops: false)
  end
end
